<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:MouseMove" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:NormalizedDeviceCoordinates" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X,Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new (it.Item1 as X, it.Item2 as Y)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Centroid</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Centroid</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="LocationX" Selector="Item2.X" />
          <Property Name="LocationY" Selector="Item2.Y" />
        </PropertyMappings>
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
        <Diameter>0.1</Diameter>
        <LocationX>-0.996875</LocationX>
        <LocationY>0.875</LocationY>
        <Layer>0</Layer>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Kinematics</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="LocationX" Selector="Item2.X.Mean" />
          <Property Name="LocationY" Selector="Item2.Y.Mean" />
        </PropertyMappings>
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
        <Diameter>0.1</Diameter>
        <LocationX>-1.09275413</LocationX>
        <LocationY>1.09060633</LocationY>
        <Layer>0</Layer>
        <ColorR>1</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:LoadLDSModule.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:GetRuntime" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.CreateKFModel.bonsai">
        <Name>model</Name>
        <Fps>60</Fps>
        <Pos_x0>0</Pos_x0>
        <Pos_y0>0</Pos_y0>
        <Vel_x0>0</Vel_x0>
        <Vel_y0>0</Vel_y0>
        <Acc_x0>0</Acc_x0>
        <Acc_y0>0</Acc_y0>
        <Sigma_a>10000</Sigma_a>
        <Sigma_x>50</Sigma_x>
        <Sigma_y>50</Sigma_y>
        <Sqrt_diag_V0_value>0.0005</Sqrt_diag_V0_value>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Centroid</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.RunOptimizationAsync.bonsai">
        <Name>model</Name>
        <sigma_a>true</sigma_a>
        <sigma_xy>true</sigma_xy>
        <m0>true</m0>
        <sqrt_diag_V0_value>true</sqrt_diag_V0_value>
        <BatchSize>200</BatchSize>
        <NumIterations>50</NumIterations>
        <PrintConvergenceMessages>true</PrintConvergenceMessages>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Centroid</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.PerformInference.bonsai">
        <Name>model</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Kinematics</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>