<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.ML.Torch;assembly=Bonsai.ML.Torch"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p2="clr-namespace:Bonsai.ML.Torch.NeuralNets;assembly=Bonsai.ML.Torch"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:InitializeTorchDevice">
          <p1:DeviceType>CUDA</p1:DeviceType>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CUDA</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:InitializeTorchDevice">
          <p1:DeviceType>CPU</p1:DeviceType>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CPU</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ToTensor" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CUDA</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Device" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ToDevice" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConvertDataType">
          <p1:Type>Float32</p1:Type>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.T.unsqueeze(0)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CUDA</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Device" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:LoadScriptModule">
          <p2:ModelPath>models\MiDaS_small.pt</p2:ModelPath>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Model" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Forward" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Index">
          <p1:Indexes>0</p1:Indexes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConvertDataType">
          <p1:Type>Float64</p1:Type>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CPU</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Device" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ToDevice" />
      </Expression>
      <Expression xsi:type="p1:ToNDArray">
        <p1:Type xsi:type="TypeMapping" TypeArguments="sys:Double" />
        <p1:Rank>2</p1:Rank>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="18" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>