<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>MouseTracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName>../../../../datasets/ForagingMouseExampleVid.avi</cv:FileName>
                <cv:PlaybackRate>0</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CropPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>1</cv:X>
                      <cv:Y>1</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>0</cv:X>
                      <cv:Y>1</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>0</cv:X>
                      <cv:Y>0</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1</cv:X>
                      <cv:Y>0</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>796</cv:X>
                      <cv:Y>597</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>799</cv:X>
                      <cv:Y>597</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>799</cv:X>
                      <cv:Y>599</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>796</cv:X>
                      <cv:Y>599</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>207</cv:X>
                      <cv:Y>502</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>172</cv:X>
                      <cv:Y>455</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>152</cv:X>
                      <cv:Y>416</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>137</cv:X>
                      <cv:Y>364</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>133</cv:X>
                      <cv:Y>325</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>133</cv:X>
                      <cv:Y>301</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>118</cv:X>
                      <cv:Y>300</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>118</cv:X>
                      <cv:Y>320</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>76</cv:X>
                      <cv:Y>318</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>83</cv:X>
                      <cv:Y>264</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>122</cv:X>
                      <cv:Y>269</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>119</cv:X>
                      <cv:Y>289</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>134</cv:X>
                      <cv:Y>290</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>138</cv:X>
                      <cv:Y>260</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>154</cv:X>
                      <cv:Y>206</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>183</cv:X>
                      <cv:Y>151</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>220</cv:X>
                      <cv:Y>107</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>255</cv:X>
                      <cv:Y>81</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>295</cv:X>
                      <cv:Y>60</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>342</cv:X>
                      <cv:Y>43</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>382</cv:X>
                      <cv:Y>36</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>421</cv:X>
                      <cv:Y>34</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>468</cv:X>
                      <cv:Y>42</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>522</cv:X>
                      <cv:Y>59</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>572</cv:X>
                      <cv:Y>87</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>609</cv:X>
                      <cv:Y>118</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>638</cv:X>
                      <cv:Y>154</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>666</cv:X>
                      <cv:Y>205</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>685</cv:X>
                      <cv:Y>259</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>690</cv:X>
                      <cv:Y>318</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>684</cv:X>
                      <cv:Y>369</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>669</cv:X>
                      <cv:Y>417</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>642</cv:X>
                      <cv:Y>467</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>611</cv:X>
                      <cv:Y>507</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>578</cv:X>
                      <cv:Y>537</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>530</cv:X>
                      <cv:Y>564</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>475</cv:X>
                      <cv:Y>583</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>419</cv:X>
                      <cv:Y>591</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>366</cv:X>
                      <cv:Y>587</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>316</cv:X>
                      <cv:Y>574</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>273</cv:X>
                      <cv:Y>555</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>242</cv:X>
                      <cv:Y>533</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>ToZero</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>255</cv:Val0>
                  <cv:Val1>255</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>255</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>65</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>BinaryInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>20</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Centroid</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RuntimeEngine</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RuntimeEngine</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LinearDynamicalSystems:LoadLDSModule</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LoadLDSModule</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="py:CreateModule">
                      <py:Name>LinearDynamicalSystems</py:Name>
                      <py:ScriptPath>Bonsai.ML.LinearDynamicalSystems:main.py</py:ScriptPath>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LDSModule</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DropFrames</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Centroid</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Tracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DropFrames</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Centroid</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2f">
          <cv:X>NaN</cv:X>
          <cv:Y>NaN</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>DropFrames</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DropFrames</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.CreateObservation2D.bonsai" />
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Observation</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Centroid</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>TrackingStarted</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>!double.IsNaN(it.X) &amp;&amp; it.X != 0</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TrackingStarted</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Observation</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Learning.RunOptimizationAsync.bonsai">
        <BatchSize>200</BatchSize>
        <Name>model</Name>
        <sigma_a>true</sigma_a>
        <sigma_xy>true</sigma_xy>
        <m0>true</m0>
        <sqrt_diag_V0_value>true</sqrt_diag_V0_value>
        <NumIterations>50</NumIterations>
        <PrintConvergenceMessages>true</PrintConvergenceMessages>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>AwaitOptimization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Observation</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Learning.CheckOptimizationFinished.bonsai">
              <Name>model</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Iteration</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Stop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Iteration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>LearningIterations</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrackingStarted</Name>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Pos_x0" Selector="it.X" />
          <Property Name="Pos_y0" Selector="it.Y" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Fps" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.CreateKFModel.bonsai">
        <Name>model</Name>
        <Fps>50</Fps>
        <Pos_x0>640.20025634765625</Pos_x0>
        <Pos_y0>462.7911376953125</Pos_y0>
        <Vel_x0>0</Vel_x0>
        <Vel_y0>0</Vel_y0>
        <Acc_x0>0</Acc_x0>
        <Acc_y0>0</Acc_y0>
        <Sigma_a>10000</Sigma_a>
        <Sigma_x>100</Sigma_x>
        <Sigma_y>100</Sigma_y>
        <Sqrt_diag_V0_value>0.001</Sqrt_diag_V0_value>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>ModelParameters</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Observation</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ModelParameters</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.PerformInference.bonsai">
        <Name>model</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>InferredKinematics</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Timesteps</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToInt32(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Timesteps" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.PerformForecasting.bonsai">
        <Name>model</Name>
        <Timesteps>38</Timesteps>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Forecast</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ForecastVisualizer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Forecast</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>InferredKinematics</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Forecast</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>InferredKinematics</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (it.Position.X.Mean as X, it.Position.Y.Mean as Y)</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="X" />
                <Property Name="Y" Selector="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint2f">
                <cv:X>136.201477</cv:X>
                <cv:Y>290.267822</cv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>2</viz:ColumnCount>
              <viz:RowCount>1</viz:RowCount>
              <viz:ColumnStyles />
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="13" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ControlPanel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>ForecastingControlPanel</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="gui:LabelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Forecast Controller</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:SliderBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Minimum>1</gui:Minimum>
                    <gui:Maximum>100</gui:Maximum>
                    <gui:DecimalPlaces>0</gui:DecimalPlaces>
                    <gui:Value>38</gui:Value>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Timesteps</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>ForecastSteps</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles>
                      <gui:RowStyle>
                        <gui:SizeType>Absolute</gui:SizeType>
                        <gui:Height>50</gui:Height>
                      </gui:RowStyle>
                    </gui:RowStyles>
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>LearningControlPanel</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="gui:LabelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Learning Controller</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:LabelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>false</gui:Visible>
                    <gui:Text />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LearningIterations</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>Number of iterations: {0}</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Number of iterations: 0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:LabelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>false</gui:Visible>
                    <gui:Text />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Start</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Start</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Stop</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Stop</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>LearningControlPanel</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>3</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles>
                      <gui:RowStyle>
                        <gui:SizeType>Absolute</gui:SizeType>
                        <gui:Height>50</gui:Height>
                      </gui:RowStyle>
                      <gui:RowStyle>
                        <gui:SizeType>Absolute</gui:SizeType>
                        <gui:Height>50</gui:Height>
                      </gui:RowStyle>
                      <gui:RowStyle>
                        <gui:Height>0</gui:Height>
                      </gui:RowStyle>
                    </gui:RowStyles>
                    <gui:CellSpans>
                      <gui:CellSpan ColumnSpan="2" RowSpan="1" />
                      <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                      <gui:CellSpan ColumnSpan="2" RowSpan="1" />
                      <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                      <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                    </gui:CellSpans>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="17" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="17" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="17" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="17" Label="Source4" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="17" Label="Source5" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source6" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>FramesControlPanel</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="gui:LabelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>FrameController</gui:Text>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Drop Frames</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="Mod">
                          <Operand xsi:type="IntProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>DropFrames</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans>
                      <gui:CellSpan ColumnSpan="2" RowSpan="1" />
                      <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                    </gui:CellSpans>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>ControlPanel</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>30</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>50</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>20</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="36" Label="Source1" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="40" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="46" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>