<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="SamplingFrequency" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>20</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Fps</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RuntimeEngine</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RuntimeEngine</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:LoadLDSModule.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Fps</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SamplingFrequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SimulatedData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>0</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RandomNumber</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RandomNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateNormal">
                <p1:Mean>0</p1:Mean>
                <p1:StdDev>0.1</p1:StdDev>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Noise</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SamplingFrequency" Category="Simulation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &gt; 0 ? TimeSpan.FromSeconds(1/it) : TimeSpan.FromSeconds(1)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Period" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.05S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>double(it)/20</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Cos" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AddNoise</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Noise</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0.18168724010346052</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="DoubleProperty">
                <Value>1.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>166</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Sin" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AddNoise</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Noise</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0.0257478234015266</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="DoubleProperty">
                <Value>1.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>166</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (it.Item1 as X, it.Item2 as Y)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="19" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.CreateObservation2D.bonsai" />
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Observation</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Fps</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Fps" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Observation</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Pos_x0" Selector="it.X" />
          <Property Name="Pos_y0" Selector="it.Y" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.CreateKFModel.bonsai">
        <ModelName>model</ModelName>
        <Fps>20</Fps>
        <Pos_x0>424.62096120954163</Pos_x0>
        <Pos_y0>274.14277974389694</Pos_y0>
        <Vel_x0>0</Vel_x0>
        <Vel_y0>0</Vel_y0>
        <Acc_x0>0</Acc_x0>
        <Acc_y0>0</Acc_y0>
        <Sigma_a>10000</Sigma_a>
        <Sigma_x>100</Sigma_x>
        <Sigma_y>100</Sigma_y>
        <Sqrt_diag_V0_value>0.001</Sqrt_diag_V0_value>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>ModelParameters</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Observation</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.PerformInference.bonsai">
        <ModelName>model</ModelName>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>InferredPosition</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Velocity</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>InferredVelocity</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Acceleration</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>InferredAcceleration</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>KinematicsVisualizer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>InferredPosition</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>InferredPosition</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>InferredVelocity</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>InferredVelocity</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>InferredAcceleration</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>InferredAcceleration</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>1</viz:ColumnCount>
              <viz:RowCount>6</viz:RowCount>
              <viz:ColumnStyles />
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="12" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="12" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source5" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source6" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="GroupWorkflow">
        <Name>ImageVisualizer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Observation</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>DrawObservation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Canvas</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Observation</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Center" Selector="X,Y" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:Circle">
                      <drw:Center>
                        <drw:X>302</drw:X>
                        <drw:Y>88</drw:Y>
                      </drw:Center>
                      <drw:Radius>5</drw:Radius>
                      <drw:Color>
                        <drw:Val0>255</drw:Val0>
                        <drw:Val1>0</drw:Val1>
                        <drw:Val2>0</drw:Val2>
                        <drw:Val3>255</drw:Val3>
                      </drw:Color>
                      <drw:Thickness>-1</drw:Thickness>
                      <drw:LineType>Connected8</drw:LineType>
                      <drw:Shift>0</drw:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Canvas</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DrawInference</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InferredPosition</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Center" Selector="X.Mean,Y.Mean" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:Circle">
                      <drw:Center>
                        <drw:X>283</drw:X>
                        <drw:Y>77</drw:Y>
                      </drw:Center>
                      <drw:Radius>5</drw:Radius>
                      <drw:Color>
                        <drw:Val0>0</drw:Val0>
                        <drw:Val1>0</drw:Val1>
                        <drw:Val2>255</drw:Val2>
                        <drw:Val3>255</drw:Val3>
                      </drw:Color>
                      <drw:Thickness>1</drw:Thickness>
                      <drw:LineType>Connected8</drw:LineType>
                      <drw:Shift>0</drw:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InferredPosition</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>from System import Array
import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point
output = [[]]
max_i = 1000
@returns(Array[Array[Point]])
def process(value):
  global output, max_i
  if len(output[0]) &gt; max_i:
    output[0].pop(0)
  output[0].append(value)
  return Array[Array[Point]]([Array[Point]([Point(val.X.Mean, val.Y.Mean) for val in output[0]])])</ipy:Script>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Points" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:PolyLine">
                      <drw:Closed>false</drw:Closed>
                      <drw:Color>
                        <drw:Val0>0</drw:Val0>
                        <drw:Val1>0</drw:Val1>
                        <drw:Val2>255</drw:Val2>
                        <drw:Val3>255</drw:Val3>
                      </drw:Color>
                      <drw:Thickness>1</drw:Thickness>
                      <drw:LineType>Connected8</drw:LineType>
                      <drw:Shift>0</drw:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InferredPosition</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Center" Selector="X.Mean,Y.Mean" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InferredPosition</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Axes" Selector="X.Variance,Y.Variance" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Angle" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="drw:Ellipse">
                      <drw:Center>
                        <drw:X>283</drw:X>
                        <drw:Y>77</drw:Y>
                      </drw:Center>
                      <drw:Axes>
                        <drw:Width>97</drw:Width>
                        <drw:Height>97</drw:Height>
                      </drw:Axes>
                      <drw:Angle>0</drw:Angle>
                      <drw:StartAngle>0</drw:StartAngle>
                      <drw:EndAngle>360</drw:EndAngle>
                      <drw:Color>
                        <drw:Val0>0</drw:Val0>
                        <drw:Val1>0</drw:Val1>
                        <drw:Val2>255</drw:Val2>
                        <drw:Val3>255</drw:Val3>
                      </drw:Color>
                      <drw:Thickness>1</drw:Thickness>
                      <drw:LineType>AntiAliased</drw:LineType>
                      <drw:Shift>0</drw:Shift>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="13" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="13" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="13" Label="Source3" />
                  <Edge From="12" To="13" Label="Source4" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:DrawCanvas" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:SolidColor">
                <cv:Size>
                  <cv:Width>500</cv:Width>
                  <cv:Height>500</cv:Height>
                </cv:Size>
                <cv:Depth>U8</cv:Depth>
                <cv:Channels>3</cv:Channels>
                <cv:Color>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Color>
              </Combinator>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Size" Selector="Size" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:CreateCanvas">
                <drw:Size>
                  <drw:Width>500</drw:Width>
                  <drw:Height>500</drw:Height>
                </drw:Size>
                <drw:Depth>U8</drw:Depth>
                <drw:Channels>3</drw:Channels>
                <drw:Color>
                  <drw:Val0>0</drw:Val0>
                  <drw:Val1>0</drw:Val1>
                  <drw:Val2>0</drw:Val2>
                  <drw:Val3>0</drw:Val3>
                </drw:Color>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Image" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:AddImage">
                <drw:Destination>
                  <drw:X>0</drw:X>
                  <drw:Y>0</drw:Y>
                  <drw:Width>0</drw:Width>
                  <drw:Height>0</drw:Height>
                </drw:Destination>
                <drw:Interpolation>Linear</drw:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Canvas</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:Name>SimulatedDataVisualizer</viz:Name>
        <viz:ColumnCount>2</viz:ColumnCount>
        <viz:RowCount>1</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles>
          <viz:RowStyle>
            <viz:SizeType>Absolute</viz:SizeType>
            <viz:Height>0</viz:Height>
          </viz:RowStyle>
        </viz:RowStyles>
        <viz:CellSpans />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="17" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="20" To="25" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="31" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>