<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.ML.Torch;assembly=Bonsai.ML.Torch"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:Bonsai.ML.PointProcessDecoder;assembly=Bonsai.ML.PointProcessDecoder"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p3="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadModel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:InitializeTorchDevice">
                <p1:DeviceType>CPU</p1:DeviceType>
                <p1:DeviceIndex>-1</p1:DeviceIndex>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CPU</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:InitializeTorchDevice">
                <p1:DeviceType>CUDA</p1:DeviceType>
                <p1:DeviceIndex>-1</p1:DeviceIndex>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CUDA</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CUDA</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Device" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreatePointProcessModel">
                <p2:Name>PointProcessModel</p2:Name>
                <p2:ScalarType xsi:nil="true" />
                <p2:StateSpaceType>DiscreteUniform</p2:StateSpaceType>
                <p2:StateSpaceDimensions>2</p2:StateSpaceDimensions>
                <p2:MinStateSpace>
                  <p2:double>0</p2:double>
                  <p2:double>0</p2:double>
                </p2:MinStateSpace>
                <p2:MaxStateSpace>
                  <p2:double>120</p2:double>
                  <p2:double>120</p2:double>
                </p2:MaxStateSpace>
                <p2:StepsStateSpace>
                  <p2:long>50</p2:long>
                  <p2:long>50</p2:long>
                </p2:StepsStateSpace>
                <p2:ObservationBandwidth>
                  <p2:double>15</p2:double>
                  <p2:double>15</p2:double>
                </p2:ObservationBandwidth>
                <p2:EncoderType>ClusterlessMarks</p2:EncoderType>
                <p2:KernelLimit xsi:nil="true" />
                <p2:NUnits xsi:nil="true" />
                <p2:MarkDimensions>4</p2:MarkDimensions>
                <p2:MarkChannels>28</p2:MarkChannels>
                <p2:MarkBandwidth>
                  <p2:double>5</p2:double>
                  <p2:double>5</p2:double>
                  <p2:double>5</p2:double>
                  <p2:double>5</p2:double>
                </p2:MarkBandwidth>
                <p2:EstimationMethod>KernelCompression</p2:EstimationMethod>
                <p2:DistanceThreshold>1.5</p2:DistanceThreshold>
                <p2:LikelihoodType>Clusterless</p2:LikelihoodType>
                <p2:IgnoreNoSpikes>false</p2:IgnoreNoSpikes>
                <p2:TransitionsType>RandomWalk</p2:TransitionsType>
                <p2:SigmaRandomWalk>1</p2:SigmaRandomWalk>
                <p2:DecoderType>StateSpaceDecoder</p2:DecoderType>
                <p2:StayProbability xsi:nil="true" />
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixReader">
                <dsp:Path>../../../datasets/HippocampalTetrodeRecordings/position.bin</dsp:Path>
                <dsp:Offset>0</dsp:Offset>
                <dsp:SampleRate>500</dsp:SampleRate>
                <dsp:ChannelCount>2</dsp:ChannelCount>
                <dsp:BufferLength>60</dsp:BufferLength>
                <dsp:Depth>F64</dsp:Depth>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixReader">
                <dsp:Path>../../../datasets/HippocampalTetrodeRecordings/marks.bin</dsp:Path>
                <dsp:Offset>0</dsp:Offset>
                <dsp:SampleRate>30000</dsp:SampleRate>
                <dsp:ChannelCount>4</dsp:ChannelCount>
                <dsp:BufferLength>28</dsp:BufferLength>
                <dsp:Depth>F64</dsp:Depth>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CUDA</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Device" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ToTensor">
                <p1:Type>Float32</p1:Type>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Clone" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.squeeze(null).unsqueeze(0)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>60</rx:Count>
                <rx:Skip>60</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Concat">
                <p1:Dimension>0</p1:Dimension>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(it[0].Val0 as X, it[1].Val0 as Y)</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="X" />
                <Property Name="Y" Selector="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint2d">
                <cv:X>119.92543610259369</cv:X>
                <cv:Y>31.923501968383789</cv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TruePosition</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CUDA</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Device" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ToTensor">
                <p1:Type>Float32</p1:Type>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Clone" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.squeeze(null)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Reshape">
                <p1:Dimensions>
                  <p1:long>60</p1:long>
                  <p1:long>2</p1:long>
                </p1:Dimensions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Covariate</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ClusterlessMarks</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="22" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>EncodingBatchSize</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>100</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DecodingBatchSize</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Covariate</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ClusterlessMarks</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Encode">
          <p2:Name>PointProcessModel</p2:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ClusterlessMarks</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Decode">
          <p2:Name>PointProcessModel</p2:Name>
          <p2:IgnoreNoSpikes>false</p2:IgnoreNoSpikes>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TruePosition</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="rx:PublishSubject" TypeArguments="p3:Point2d">
        <rx:Name>MAP</rx:Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:GetDecoderData">
          <p2:Name>PointProcessModel</p2:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MaximumAPosterioriEstimate</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Index">
          <p1:Value>-1</p1:Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ConvertToPoint2d</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Index">
                <p1:Value>0</p1:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Index">
                <p1:Value>1</p1:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="Item1" />
                <Property Name="Y" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint2d">
                <cv:X>83.265304565429688</cv:X>
                <cv:Y>71.0204086303711</cv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>MAP</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="16" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source3" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>