<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:p2="clr-namespace:Bonsai.ML.Torch;assembly=Bonsai.ML.Torch"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p3="clr-namespace:Bonsai.ML.PointProcessDecoder;assembly=Bonsai.ML.PointProcessDecoder"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>PointProcessModel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:TorchSharpInitializer" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:InitializeTorchDevice">
                <p2:DeviceType>CPU</p2:DeviceType>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CPU</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:InitializeTorchDevice">
                <p2:DeviceType>CUDA</p2:DeviceType>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CUDA</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CUDA</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Device" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreatePointProcessModel">
                <p3:Name>PointProcessModel</p3:Name>
                <p3:ScalarType xsi:nil="true" />
                <p3:StateSpaceType>DiscreteUniformStateSpace</p3:StateSpaceType>
                <p3:StateSpaceDimensions>2</p3:StateSpaceDimensions>
                <p3:MinStateSpace>
                  <p3:double>0</p3:double>
                  <p3:double>0</p3:double>
                </p3:MinStateSpace>
                <p3:MaxStateSpace>
                  <p3:double>120</p3:double>
                  <p3:double>120</p3:double>
                </p3:MaxStateSpace>
                <p3:StepsStateSpace>
                  <p3:long>50</p3:long>
                  <p3:long>50</p3:long>
                </p3:StepsStateSpace>
                <p3:ObservationBandwidth>
                  <p3:double>10</p3:double>
                  <p3:double>10</p3:double>
                </p3:ObservationBandwidth>
                <p3:EncoderType>ClusterlessMarkEncoder</p3:EncoderType>
                <p3:NUnits xsi:nil="true" />
                <p3:MarkDimensions>4</p3:MarkDimensions>
                <p3:MarkChannels>28</p3:MarkChannels>
                <p3:MarkBandwidth>
                  <p3:double>20</p3:double>
                  <p3:double>20</p3:double>
                  <p3:double>20</p3:double>
                  <p3:double>20</p3:double>
                </p3:MarkBandwidth>
                <p3:EstimationMethod>KernelCompression</p3:EstimationMethod>
                <p3:DistanceThreshold>2</p3:DistanceThreshold>
                <p3:LikelihoodType>Clusterless</p3:LikelihoodType>
                <p3:IgnoreNoSpikes>false</p3:IgnoreNoSpikes>
                <p3:TransitionsType>RandomWalk</p3:TransitionsType>
                <p3:SigmaRandomWalk>1</p3:SigmaRandomWalk>
                <p3:DecoderType>StateSpaceDecoder</p3:DecoderType>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Model</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>KalmanFilter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:CreateRuntime" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:LoadLDSModule.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Point</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Pos_x0" Selector="X" />
                <Property Name="Pos_y0" Selector="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.CreateKFModel.bonsai">
              <Name>model</Name>
              <Fps>60</Fps>
              <Pos_x0>10.237831115722656</Pos_x0>
              <Pos_y0>8.7659497261047363</Pos_y0>
              <Vel_x0>0</Vel_x0>
              <Vel_y0>0</Vel_y0>
              <Acc_x0>0</Acc_x0>
              <Acc_y0>0</Acc_y0>
              <Sigma_a>5000</Sigma_a>
              <Sigma_x>50</Sigma_x>
              <Sigma_y>50</Sigma_y>
              <Sqrt_diag_V0_value>0.01</Sqrt_diag_V0_value>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Point</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.CreateObservation2D.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.ML.LinearDynamicalSystems:Kinematics.PerformInference.bonsai">
              <Name>model</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Kinematics</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixReader">
                <dsp:Path>../../../datasets/HippocampalTetrodeRecordings/position.bin</dsp:Path>
                <dsp:Offset>0</dsp:Offset>
                <dsp:SampleRate>30000</dsp:SampleRate>
                <dsp:ChannelCount>2</dsp:ChannelCount>
                <dsp:BufferLength>1</dsp:BufferLength>
                <dsp:Depth>F64</dsp:Depth>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixReader">
                <dsp:Path>../../../datasets/HippocampalTetrodeRecordings/marks.bin</dsp:Path>
                <dsp:Offset>0</dsp:Offset>
                <dsp:SampleRate>30000</dsp:SampleRate>
                <dsp:ChannelCount>4</dsp:ChannelCount>
                <dsp:BufferLength>28</dsp:BufferLength>
                <dsp:Depth>F64</dsp:Depth>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(it[0].Val0 as X, it[1].Val0 as Y)</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="X" />
                <Property Name="Y" Selector="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint2d">
                <cv:X>113.84069366455078</cv:X>
                <cv:Y>54.805405426025388</cv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Point</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:SolidColor">
                <cv:Size>
                  <cv:Width>120</cv:Width>
                  <cv:Height>120</cv:Height>
                </cv:Size>
                <cv:Depth>U8</cv:Depth>
                <cv:Channels>3</cv:Channels>
                <cv:Color>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Color>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ToTensor" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Clone" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.squeeze(null).unsqueeze(0)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ConvertDataType">
                <p2:Type>Float32</p2:Type>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CUDA</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Device" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ToDevice" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>StateObservation</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ToTensor" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Clone" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.squeeze(null).unsqueeze(0)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ConvertDataType">
                <p2:Type>Float32</p2:Type>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CUDA</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Device" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ToDevice" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ClusterlessMarks</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateObservation</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="18" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="25" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:DateTimeOffset">
        <rx:Name>EncodingEndTime</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:DateTimeOffset">
        <rx:Name>EncodingStartTime</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:DateTimeOffset">
        <rx:Name>DecodingEndTime</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:DateTimeOffset">
        <rx:Name>DecodingStartTime</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Point</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Kinematics</Name>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="X" Selector="Position.X.Mean" />
          <Property Name="Y" Selector="Position.Y.Mean" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2d">
          <cv:X>113.7977738261163</cv:X>
          <cv:Y>54.798520602726647</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Kinematics</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Math.Sqrt(Math.Pow(it.Velocity.X.Mean, 2) + Math.Pow(it.Velocity.Y.Mean, 2))</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>EncodeData</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>EncodingBatchSize</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>10</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DecodingBatchSize</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>VelocityThreshold</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateObservation</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Kinematics</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VelocityThreshold</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Math.Sqrt(Math.Pow(it.Item1.Item2.Velocity.X.Mean, 2) + Math.Pow(it.Item1.Item2.Velocity.Y.Mean, 2)) &gt; it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Batch</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateObservation</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Kinematics</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VelocityThreshold</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Math.Sqrt(Math.Pow(it.Item1.Item2.Velocity.X.Mean, 2) + Math.Pow(it.Item1.Item2.Velocity.Y.Mean, 2)) &gt; it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Batch</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Concat">
                <p2:Dimension>0</p2:Dimension>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Batch</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.shape[0]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EncodingBatchSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ClusterlessMarks</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Kinematics</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VelocityThreshold</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Math.Sqrt(Math.Pow(it.Item1.Item2.Velocity.X.Mean, 2) + Math.Pow(it.Item1.Item2.Velocity.Y.Mean, 2)) &gt; it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Batch</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ClusterlessMarks</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Kinematics</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VelocityThreshold</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Math.Sqrt(Math.Pow(it.Item1.Item2.Velocity.X.Mean, 2) + Math.Pow(it.Item1.Item2.Velocity.Y.Mean, 2)) &gt; it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Batch</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Concat">
                <p2:Dimension>0</p2:Dimension>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Batch</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.shape[0]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EncodingBatchSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EncodeData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>EncodingStartTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EncodingStartTime</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p3:Encode">
          <p3:Model>PointProcessModel</p3:Model>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>EncodingEndTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EncodingEndTime</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>GetLatestModel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:GetModel">
                <p3:Model>PointProcessModel</p3:Model>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Model</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>FirstEncodingBatchComplete</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ClusterlessMarks</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Batch</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ClusterlessMarks</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Batch</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Concat">
                <p2:Dimension>0</p2:Dimension>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Batch</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.shape[0]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DecodingBatchSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>DecodingStartTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DecodingStartTime</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p3:Decode">
          <p3:Model>PointProcessModel</p3:Model>
          <p3:IgnoreNoSpikes>true</p3:IgnoreNoSpikes>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>DecodingEndTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DecodingEndTime</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:ConvertDataType">
          <p2:Type>Float64</p2:Type>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.sum(0, false, null)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CPU</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Device" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:ToDevice" />
      </Expression>
      <Expression xsi:type="p2:ToNDArray">
        <p2:Type xsi:type="TypeMapping" TypeArguments="sys:Double" />
        <p2:Rank>2</p2:Rank>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FirstEncodingBatchComplete</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Model</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>TotalNumberOfKernels</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Encoder.Estimations</Selector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Kernels</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.shape[0]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ToTensor" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.sum(null).ReadCpuInt64(0)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="GroupWorkflow">
        <Name>DecodingLatency</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DecodingEndTime</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DecodingStartTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="MemberSelector">
              <Selector>TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EncodingLatency</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>EncodingEndTime</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EncodingStartTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="MemberSelector">
              <Selector>TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="13" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="32" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="50" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source2" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="53" Label="Source1" />
      <Edge From="52" To="53" Label="Source2" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="55" To="57" Label="Source2" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>