<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.ML.PointProcessDecoder;assembly=Bonsai.ML.PointProcessDecoder"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p2="clr-namespace:Bonsai.ML.Torch;assembly=Bonsai.ML.Torch"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreatePointProcessModel">
          <p1:Name>PointProcessModel</p1:Name>
          <p1:EstimationMethod>KernelCompression</p1:EstimationMethod>
          <p1:TransitionsType>RandomWalk</p1:TransitionsType>
          <p1:EncoderType>SortedSpikeEncoder</p1:EncoderType>
          <p1:DecoderType>StateSpaceDecoder</p1:DecoderType>
          <p1:StateSpaceType>DiscreteUniformStateSpace</p1:StateSpaceType>
          <p1:LikelihoodType>Poisson</p1:LikelihoodType>
          <p1:ScalarType xsi:nil="true" />
          <p1:StateSpaceDimensions>2</p1:StateSpaceDimensions>
          <p1:MinStateSpace>
            <p1:double>0</p1:double>
            <p1:double>0</p1:double>
          </p1:MinStateSpace>
          <p1:MaxStateSpace>
            <p1:double>120</p1:double>
            <p1:double>120</p1:double>
          </p1:MaxStateSpace>
          <p1:StepsStateSpace>
            <p1:long>50</p1:long>
            <p1:long>50</p1:long>
          </p1:StepsStateSpace>
          <p1:ObservationBandwidth>
            <p1:double>2</p1:double>
            <p1:double>2</p1:double>
          </p1:ObservationBandwidth>
          <p1:NUnits>104</p1:NUnits>
          <p1:MarkDimensions xsi:nil="true" />
          <p1:MarkChannels xsi:nil="true" />
          <p1:DistanceThreshold>1.5</p1:DistanceThreshold>
          <p1:SigmaRandomWalk>1</p1:SigmaRandomWalk>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixReader">
                <dsp:Path>../../../datasets/HippocampalTetrodeRecordings/position.bin</dsp:Path>
                <dsp:Offset>0</dsp:Offset>
                <dsp:SampleRate>2000</dsp:SampleRate>
                <dsp:ChannelCount>2</dsp:ChannelCount>
                <dsp:BufferLength>60</dsp:BufferLength>
                <dsp:Depth>F64</dsp:Depth>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixReader">
                <dsp:Path>../../../datasets/HippocampalTetrodeRecordings/spike_counts.bin</dsp:Path>
                <dsp:Offset>0</dsp:Offset>
                <dsp:SampleRate>2000</dsp:SampleRate>
                <dsp:ChannelCount>104</dsp:ChannelCount>
                <dsp:BufferLength>60</dsp:BufferLength>
                <dsp:Depth>F64</dsp:Depth>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(it[0].Val0 as X, it[1].Val0 as Y)</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="X" />
                <Property Name="Y" Selector="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint2d">
                <cv:X>5.5449127197265629</cv:X>
                <cv:Y>62.032224273681642</cv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Point</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:SolidColor">
                <cv:Size>
                  <cv:Width>120</cv:Width>
                  <cv:Height>120</cv:Height>
                </cv:Size>
                <cv:Depth>U8</cv:Depth>
                <cv:Channels>3</cv:Channels>
                <cv:Color>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Color>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Image</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ToTensor" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Clone" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.squeeze(null)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Reshape">
                <p2:Dimensions>
                  <p2:long>60</p2:long>
                  <p2:long>2</p2:long>
                </p2:Dimensions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ConvertDataType">
                <p2:Type>Float32</p2:Type>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>StateObservation</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ToTensor" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Clone" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.squeeze(null)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Reshape">
                <p2:Dimensions>
                  <p2:long>60</p2:long>
                  <p2:long>104</p2:long>
                </p2:Dimensions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ConvertDataType">
                <p2:Type>Int32</p2:Type>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SortedSpikeCounts</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateObservation</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="16" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:DateTimeOffset">
        <rx:Name>DecodingStartTime</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:DateTimeOffset">
        <rx:Name>DecodingEndTime</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:DateTimeOffset">
        <rx:Name>EncodingStartTime</rx:Name>
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:DateTimeOffset">
        <rx:Name>EncodingEndTime</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Point</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StateObservation</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SortedSpikeCounts</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1000</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EncodingStartTime</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Encode">
          <p1:Model>PointProcessModel</p1:Model>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EncodingEndTime</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SortedSpikeCounts</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1000</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DecodingStartTime</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Decode">
          <p1:Model>PointProcessModel</p1:Model>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DecodingEndTime</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:ConvertDataType">
          <p2:Type>Float64</p2:Type>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.sum(0, false, null)</scr:Expression>
      </Expression>
      <Expression xsi:type="p2:ToNDArray">
        <p2:Type xsi:type="TypeMapping" TypeArguments="sys:Double" />
        <p2:Rank>2</p2:Rank>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DecodingLatency</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DecodingEndTime</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DecodingStartTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="MemberSelector">
              <Selector>TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EncodingLatency</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>EncodingEndTime</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EncodingStartTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="MemberSelector">
              <Selector>TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>