<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:Bonsai.ML.Torch;assembly=Bonsai.ML.Torch"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p2="clr-namespace:Bonsai.ML.Torch.NeuralNets;assembly=Bonsai.ML.Torch"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ToTensor">
          <p1:Type xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConvertScalarType">
          <p1:Type>Float32</p1:Type>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.T.unsqueeze(0)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateTensor">
          <p1:Type>Float32</p1:Type>
          <p1:Values />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateTensor">
          <p1:Type>Float32</p1:Type>
          <p1:Values />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:LoadScriptModule">
          <p2:ScriptModulePath>models/MiDaS_small.pt</p2:ScriptModulePath>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Forward" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.T</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ToImage" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="7" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>